PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://www.surveymonkey.com/r/KQBSTH2
  Data filename = u'data/%s_%s_%s' % (expInfo['MTURK_ID'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Fluency
  exportHTML = on Save
  logging level = debug
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Routines
  Routine Instructions
    ImageComponent instructions_image_1
      image [set every repeat] = $INS
      size = (1280,720)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent instructions_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent JS_code
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        TrialClock = new util.Clock();
  Routine Trial
    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent timer
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
      text [set every frame] = $timerText
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    TextComponent instruct_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
      text = Type as many items as possible that belong to the following category. Press "ENTER" after each item you type. 
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    TextComponent letter_text
      letterHeight = 0.05
      pos = (0, 0.28)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
      text [set every repeat] = $Category
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    TextComponent screen_text
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    TextComponent list_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    TextComponent list_text2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    TextComponent list_text3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    TextComponent list_text4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    TextComponent list_text5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 90
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    CodeComponent displayText
      Code Type = Both
      Before JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        TrialClock = new util.Clock();
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase) #makes a list of alphabet characters
      Begin JS Experiment:
        allLetters = "abcdefghijklmnopqrstuvwxyz".split('');
      Begin JS Routine:
        event.clearEvents();

        TrialClock.reset();

        textFill = "";
        list_text1.setText("");
        list_text1.pos = [(- 0.6), 0.15];

        list_text2.setText("");
        list_text2.pos = [(- 0.3), 0.15];

        list_text3.setText("");
        list_text3.pos = [0, 0.15];

        list_text4.setText("");
        list_text4.pos = [0.3, 0.15];

        list_text5.setText("");
        list_text5.pos = [0.6, 0.15];

        textController = [list_text1, list_text2, list_text3, list_text4, list_text5];
        textIndex = 0;
        entryCount = 0;

        words_rt = [];

        letter_text.bold = true;
      Begin Routine:
        # make sure no previous keypresses are used in the word
        event.clearEvents()
        #reset the routine Trial's clock
        TrialClock.reset()
        # create empty strings for each of our word lists
        textFill = ''
        list_text1.setText('')
        list_text1.pos = [-.6, .15]

        list_text2.setText('')
        list_text2.pos = [-.3, .15]

        list_text3.setText('')
        list_text3.pos = [0, .15]

        list_text4.setText('')
        list_text4.pos = [.3, .15]

        list_text5.setText('')
        list_text5.pos = [.6, .15]

        textController = [list_text1, list_text2, list_text3, list_text4, list_text5]
        textIndex = 0
        entryCount = 0

        words_rt = []

        letter_text.bold = True
      Each Frame:
        timerText= str(round(routineTimer.getTime()))
        keys = event.getKeys()
        t = TrialClock.getTime()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'right':
                    continueRoutine = False
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                screen_text.setText(textFill)  # Set new text on screen

                if keys[0] == 'return':
                    # Set text input
                    column = textController[textIndex]
                    column_text = column.text + '\n' + screen_text.text
                    textFill = ''
                    screen_text.setText(textFill)
                    column.setPos([column.pos[0], column.pos[1] - (.0284)])
                    entryCount += 1
                    if entryCount >= 10:
                        entryCount = 0
                        textIndex += 1
                        if textIndex >= len(textController):
                            routineTimer.reset()
                            continueRoutine = False
                    words_rt.append(t)
                    column.setText(column_text)
      Each JS Frame:
        timerText= Math.round(routineTimer.getTime()).toString()
        keys = psychoJS.eventManager.getKeys();
        if (keys.indexOf('escape') > -1) {
            psychoJS.experiment.experimentEnded = true;
        } else {
            if (keys) {
                if ((keys[0] === "space")) {
                    textFill += " ";
                } else {
                    if ((keys[0] === "right")) {
                        continueRoutine = false;
                    } else {
                        if ((keys[0] === "backspace")) {
                            textFill = textFill.slice(0, (- 1));
                        } else {
                            if (allLetters.indexOf(keys[0]) > -1) {
                                textFill += keys[0];
                            }
                        }
                    }
                }
                screen_text.setText(textFill);

                if ((keys[0] === "return")) {
                    words_rt.append(timerText);
                    let column = textController[textIndex];
                    let column_text = ((column.text + "\n") + screen_text.text);
                    textFill = "";
                    screen_text.setText(textFill);
                    column.setPos([column.pos[0], (column.pos[1] - 0.0284)]);
                    entryCount += 1;
                    if ((entryCount >= 10)) {
                        entryCount = 0;
                        textIndex += 1;
                        if ((textIndex >= textController.length)) {
                            routineTimer.reset();
                            continueRoutine = false;
                        }
                    }
                    column.setText(column_text);
                }
            }
        }
      End JS Routine:
        word_strings = [list_text1, list_text2, list_text3, list_text4, list_text5];
        all_words = [];

        for (var this_word_string of word_strings)
           all_words= all_words.concat(this_word_string.text.trim().split('\n'))

        let num= 1
        for (var ws of all_words)
        {
            if (ws.length > 0)
            {
               psychoJS.experiment.addData("word" + num.toString(), ws)
               num= num + 1
            }
        }

        let i= 1
        for (var timerText of words_rt)
            {
               psychoJS.experiment.addData("rt_" + i.toString(), timerText)
               i= i + 1
            }

        routineTimer.reset();
      End Routine:
        word_strings = [list_text1, list_text2, list_text3, list_text4, list_text5]
        all_words = []
        for this_word_string in word_strings:
            all_words.extend(this_word_string.text.strip().split('\n'))

        num= 1
        for ws in all_words:
            thisExp.addData("word" + str(num), ws)
            num= num + 1
            #thisExp.addData("word{:03.0f}".format(index), this_word)

        i = 1
        for time in words_rt:
            thisExp.addData('rt_' + str(i), time)
            i = i + 1

        routineTimer.reset()
  Routine Catch
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.27)
      startVal [time (s)] = 0.0
      text = PRESS
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    TextComponent text_3
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $LET
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = to continue to the next trial.
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rng
    TextComponent rng_instr
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = This is your 4-digit completion code. Please write this down for later use. When you are finished, press SPACE to end the experiment. 
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    TextComponent rng_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $random_number
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    KeyboardComponent rng_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent rng_code
      Code Type = JS
      Begin JS Experiment:
        random_number = Math.floor(Math.random() * 9999) + 1000;
Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('INS', 'Instructions1.png')]),
      OrderedDict([('INS', 'Instructions2.png')]),
      OrderedDict([('INS', 'Instructions3.png')]),
      OrderedDict([('INS', 'Instructions4.png')])]
    Routine Instructions
  LoopTerminator instructions_loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'Words that start with A'), ('Type', 'Phonemic'), ('LET', 'j')]),
      OrderedDict([('Category', 'Words that start with S'), ('Type', 'Phonemic'), ('LET', 'p')]),
      OrderedDict([('Category', 'Animals'), ('Type', 'Semantic'), ('LET', 'j')]),
      OrderedDict([('Category', 'Occupations'), ('Type', 'Semantic'), ('LET', 'p')])]
    Routine Trial
    Routine Catch
  LoopTerminator trials
  Routine rng
